CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Drug>.*)_c(?P<Z_Stack>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:Golgi
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Frame

ColorToGray:[module_num:5|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
    Select the input image:GFP
    Conversion method:Combine
    Image type:RGB
    Name the output image:RAS_grey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:Golgi
    Conversion method:Combine
    Image type:RGB
    Name the output image:Golgi_Grey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
MeasureColocalization:[module_num:7|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
    Hidden:2
    Hidden:1
    Select an image to measure:Golgi_Grey
    Select an image to measure:RAS_grey
    Set threshold as percentage of maximum intensity for the images:20
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\Confocal\\880\\2-13-20\\Manders
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_GFP,Image|FileName_Golgi,Image|Correlation_Slope_Golgi_Grey_RAS_grey,Image|Correlation_RWC_Golgi_Grey_RAS_grey,Image|Correlation_RWC_RAS_grey_Golgi_Grey,Image|Correlation_K_Golgi_Grey_RAS_grey,Image|Correlation_K_RAS_grey_Golgi_Grey,Image|Correlation_Overlap_Golgi_Grey_RAS_grey,Image|Correlation_Manders_Golgi_Grey_RAS_grey,Image|Correlation_Manders_RAS_grey_Golgi_Grey,Image|Correlation_Costes_RAS_grey_Golgi_Grey,Image|Correlation_Costes_Golgi_Grey_RAS_grey,Image|Correlation_Correlation_Golgi_Grey_RAS_grey,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Experiment20_
    Overwrite existing files without warning?:No
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