CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Z_Stack": "integer", "FileLocation": "none", "Series": "text", "Frame": "text", "Time": "integer", "Drug": "text", "Cell": "text", "Compound": "text", "Image": "text", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Cell>.*)_(?P<Compound>.*)_(?P<Image>.*)_t(?P<Time>[0-9]{2})z(?P<Z_Stack>[0-9])c(?P<Channel>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Cell - Cell count', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:RFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:GFP
    Conversion method:Combine
    Image type:RGB
    Name the output image:GFP_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:RFP
    Conversion method:Combine
    Image type:RGB
    Name the output image:RFP_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:RFP_Gray
    Name the primary objects to be identified:RFP_Cell
    Typical diameter of objects, in pixel units (Min,Max):20,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:RFP_Gray
    Select objects to measure:RFP_Cell

MeasureColocalization:[module_num:9|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
    Hidden:2
    Hidden:1
    Select an image to measure:GFP_Gray
    Select an image to measure:RFP_Gray
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|G:\\Confocal\\880\\CellProfiler\\8-19-20
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Experiment|Run_Timestamp,Image|Count_RFP_Cell,Image|Width_GFP,Image|Width_RFP,Image|ExecutionTime_01Images,Image|ExecutionTime_06ColorToGray,Image|ExecutionTime_07IdentifyPrimaryObjects,Image|ExecutionTime_02Metadata,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_09MeasureColocalization,Image|ExecutionTime_05ColorToGray,Image|ExecutionTime_04Groups,Image|ExecutionTime_08MeasureObjectIntensity,Image|Series_GFP,Image|Series_RFP,Image|Frame_GFP,Image|Frame_RFP,Image|URL_GFP,Image|URL_RFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Manders
    Overwrite existing files without warning?:Yes
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